protocol.scanTypes = [1, 1, 1]              # flags for airscan, offset scan, phantom scan

# Table and gantry
protocol.scanTrajectory = "Gantry_Helical"	# name of the function that defines the scanning trajectory and model
protocol.viewsPerRotation = 100	    	    # total numbers of view per rotation
protocol.viewCount = 100                    # total number of views in scan
protocol.startViewId = 0		            # index of the first view in the scan
protocol.stopViewId = protocol.startViewId+protocol.viewCount-1 # index of the last view in the scan
protocol.airViewCount = 1		            # number of views averaged for air scan
protocol.offsetViewCount = 1		        # number of views averaged for offset scan
protocol.rotationTime = 1.0		            # gantry rotation period (in seconds)
protocol.rotationDirection = 1		        # gantry rotation direction (1=CW, -1 CCW, seen from table foot-end)
protocol.startAngle = 0		                # relative to vertical y-axis (n degrees)
protocol.tableSpeed = 0		                # speed of table translation along positive z-axis (in mm/sec)
protocol.startZ = 0		                    # start z-position of table
protocol.tiltAngle = 0		                # gantry tilt angle towards negative z-axis (in degrees)
protocol.wobbleDistance = 0.0		        # focalspot wobble distance
protocol.focalspotOffset = [0, 0, 0]		# focalspot position offset

# X-ray tube technique and filtration
protocol.mA = 200		                    # tube current (in mA)
protocol.spectrumCallback = "Spectrum"		# name of function that reads and models the X-ray spectrum
protocol.spectrumFilename = "tungsten_tar7_120_unfilt.dat" # name of the spectrum file
protocol.spectrumScaling = 1		        # scaling factor such that spectrum is in photons / mA / s / mm^2 at 1000 mm
protocol.bowtie = "sample_bowtie.dat"       # name of the bowtie file (or [])
protocol.filterCallback = "Xray_Filter"     # name of function to compute additional filtration
protocol.flatFilter = ['al',3.0]            # additional filtration - materials and thicknesses (in mm)
protocol.dutyRatio = 1.0                    # tube ON time fraction (for pulsed tubes)
