# Table and gantry
protocol.scanTypes = [1, 1, 1]              # flags for airscan, offset scan, phantom scan
protocol.viewsPerRotation = 984           # total numbers of view per rotation
protocol.viewCount = 984                   # total number of views in scan
protocol.startViewId = 0                    # index of the first view in the scan
protocol.stopViewId = protocol.startViewId+protocol.viewCount-1 # index of the last view in the scan
protocol.mA = 300                           # tube current (in mA)
protocol.spectrumCallback = "Spectrum"      # name of function that reads and models the X-ray spectrum
protocol.spectrumFilename = "xspect_tar7_120_filt.dat" # name of the spectrum file
protocol.spectrumUnit_mm = 0;
protocol.spectrumUnit_mA = 1;
protocol.spectrumScaling = 0.931                # scaling factor such that spectrum is in photons / mA / s / mm^2 at 1000 mm
protocol.flatFilter = []            # additional filtration - materials and thicknesses (in mm)
#protocol.flatFilter = ['air', 0.001]            # additional filtration - materials and thicknesses (in mm)
